PsychoPy2experiment version="2024.2.3"
Settings
  Audio lib = ptb
  End Message = Thank you for your participating!
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'age': '18', 'gender': "['male', 'female', 'non-binary', 'not listed / prefer not to say']", 'dominant hand': "['right','left']", 'first language': "['german', 'other']"}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = demo_experiment
  keyboardBackend = ioHub
  runMode = 1
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Routines
  Routine intro
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    TextComponent intro_welcome
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Welcome to the Demo Experiment!

        In this experiment, you will be asked to identify words.

        For each line of text that you see, press:
        - Right Alt Key if you see a real word
        - Left Alt Key if you do not see a real word

        When you are ready, press SPACE (Leertaste) to begin...
    KeyboardComponent intro_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
      store = nothing
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  Routine trial
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    TextComponent fix
      letterHeight = 0.05
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 0.5
      text = +
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    TextComponent stimulus
      letterHeight = 0.05
      startVal [time (s)] = 1
      text [set every repeat] = $text
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    KeyboardComponent stim_resp
      allowedKeys = 'lalt', 'ralt'
      correctAns = $corr_ans
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = first key
      storeCorrect = True
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  Routine end
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    TextComponent end_text
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Thank you for taking part!

        Now please follow the instructions on the
        ExPra website to upload your data.

        When you are ready, please press SPACE to exit...
    KeyboardComponent end_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 2
      store = nothing
      syncScreenRefresh = False
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  Routine feedback
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    CodeComponent code
      Code Type = Py
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      Begin Routine:
        if stim_resp.corr==1:
            feedback_text = visual.TextStim(win=win, height=0.05, units='height', text=f'Correct!', color='chartreuse')
        else:
            feedback_text = visual.TextStim(win=win, height=0.05, units='height', text=f'Incorrect!', color='red')

        win.flip()
        feedback_text.draw()
        win.flip()
        core.wait(0.5)
  Routine feedback_prep
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    TextComponent feedback_prep_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        The first 10 trials will be practice trials, during which you will receive feedback.

        Remember:

        If a Word: press Right Alt
        If not a Word: press Left Alt

        Press SPACE to begin the practice trials...
    KeyboardComponent feedback_prep_key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine proper_trials_prep
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    TextComponent proper_trials_prep_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        From now on, you will not get any feedback on your responses.

        Good luck!

        Here is a reminder of the task instructions:
        If a Word: press Right Alt
        If not a Word: press Left Alt

        Press SPACE to begin...
    KeyboardComponent proper_trials_prep_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 1
      store = nothing
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  Routine store_resp_and_break
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    CodeComponent break_code
      Code Type = Py
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      Begin Experiment:
        break_every = 50
        rt_list = []
        acc_list = []
      Begin Routine:
        rt_list.append(stim_resp.rt)
        acc_list.append(stim_resp.corr)

        if trials.thisN % break_every == 0 and trials.thisN < len(trials.trialList) and trials.thisN > 0:
            print('STARTING BREAK')
            break_progress = f'You have completed {trials.thisN} / {len(trials.trialList)} trials - great job!'
            #median_rt = int(np.round(np.median(rt_list)*1000))
            #perc_corr = int(np.round(np.mean(acc_list)*100))
            #performance_summ = f'Your median response time in the last {break_every} trials: {median_rt} ms\nYour accuracy in the last {break_every} trials: {perc_corr}%'
            performance_summ = ''
            break_text = visual.TextStim(win=win, height=0.05, units='height', text=f'{break_progress}\n\n{performance_summ}\n\nPlease take a short break...\n\nWhen you are ready to continue, press SPACE')
            win.flip()
            break_text.draw()
            win.flip()
            core.wait(2)
            event.waitKeys(keyList=['space'])
            rt_list = []
            acc_list = []
            print('BREAK ENDED')
Flow
  Routine intro
  Routine feedback_prep
  LoopInitiator practice_trials loopType="TrialHandler"
    conditionsFile = stimuli/practice_stim_long.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item_nr', 1), ('condition', 'word'), ('text', 'Haie')]),
      OrderedDict([('item_nr', 1), ('condition', 'pseudoword'), ('text', 'Taße')]),
      OrderedDict([('item_nr', 2), ('condition', 'word'), ('text', 'Mannes')]),
      OrderedDict([('item_nr', 2), ('condition', 'pseudoword'), ('text', 'sanzes')]),
      OrderedDict([('item_nr', 3), ('condition', 'word'), ('text', 'korrekt')]),
      OrderedDict([('item_nr', 3), ('condition', 'pseudoword'), ('text', 'Torrenk')]),
      OrderedDict([('item_nr', 4), ('condition', 'word'), ('text', 'sagt')]),
      OrderedDict([('item_nr', 4), ('condition', 'pseudoword'), ('text', 'fagt')]),
      OrderedDict([('item_nr', 5), ('condition', 'word'), ('text', 'sicheren')]),
      OrderedDict([('item_nr', 5), ('condition', 'pseudoword'), ('text', 'tofreren')])]
    Routine trial
    Routine feedback
  LoopTerminator practice_trials
  Routine proper_trials_prep
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stimuli/stim_long.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('item_nr', 1), ('condition', 'word'), ('text', 'Akzente')]),
      OrderedDict([('item_nr', 1), ('condition', 'pseudoword'), ('text', 'luxante')]),
      OrderedDict([('item_nr', 2), ('condition', 'word'), ('text', 'Drücker')]),
      OrderedDict([('item_nr', 2), ('condition', 'pseudoword'), ('text', 'zwökker')]),
      OrderedDict([('item_nr', 3), ('condition', 'word'), ('text', 'Erwachsener')]),
      OrderedDict([('item_nr', 3), ('condition', 'pseudoword'), ('text', 'Muzingsener')]),
      OrderedDict([('item_nr', 4), ('condition', 'word'), ('text', 'Exorzisten')]),
      OrderedDict([('item_nr', 4), ('condition', 'pseudoword'), ('text', 'uxalbisten')]),
      OrderedDict([('item_nr', 5), ('condition', 'word'), ('text', 'Fabel')]),
      OrderedDict([('item_nr', 5), ('condition', 'pseudoword'), ('text', 'Gafel')]),
      OrderedDict([('item_nr', 6), ('condition', 'word'), ('text', 'Faulpelze')]),
      OrderedDict([('item_nr', 6), ('condition', 'pseudoword'), ('text', 'Paulzenze')]),
      OrderedDict([('item_nr', 7), ('condition', 'word'), ('text', 'Figuren')]),
      OrderedDict([('item_nr', 7), ('condition', 'pseudoword'), ('text', 'pomuren')]),
      OrderedDict([('item_nr', 8), ('condition', 'word'), ('text', 'Filigrane')]),
      OrderedDict([('item_nr', 8), ('condition', 'pseudoword'), ('text', 'Disiphase')]),
      OrderedDict([('item_nr', 9), ('condition', 'word'), ('text', 'Geschicke')]),
      OrderedDict([('item_nr', 9), ('condition', 'pseudoword'), ('text', 'mepfrokke')]),
      OrderedDict([('item_nr', 10), ('condition', 'word'), ('text', 'Gondel')])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
    Routine trial
    Routine store_resp_and_break
  LoopTerminator trials
  Routine end
